% Calcium buffer (Durstewitz, Seamans, Sejnowski 2000)
taurCa=500
taudCa=80
CaRest = 50/1000; 	% umol/l, resting calcium concentration
IC=.000001; IC_noise=0

% ODEs and ICs
cai' = max(0,-@ica)./taurCa+(CaRest-cai)./taudCa
cai(0) = IC+IC_noise*rand(1,Npop)

% Linkers
@cai += cai

%% Parameters
%depth = [0.1]
%taurca = [28.5714] % [200]
%cainf = [5e-05]
%FARADAY = [96520]
%IC_noise = [0]
%IC=[.00005]
%
%% ODEs and ICs
%cai' = max(0,-(10000)*@ica/(2*FARADAY*depth))/18+(cainf-cai)/taurca; %*7;
%cai(0) = IC+IC_noise.*rand(1,Npop)
% 
%% Linkers
%@cai += cai

%% Calcium buffer dynamics (Durstewitz, Seamans, Sejnowski 2000)
%% Requires: calcium current @ica
%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%
%% Parameters
%phi = .000000386; 	% calcium accumulation factor. (.000000386 soma; .000000965 dend)
%Carest = 50/1000; 	% umol/l, resting calcium concentration
%dshell = .0002; 	% um, sperimembrane shell thickness
%d = 2.6; 		% um, compartment diamter (23 soma, 2.6 apical dend, 16 basal dend)
%l = 400; 		% um, compartment length (-- soma, 400 dend, 150 basal dend)
%tauCa = 120; 		% 250 soma, 120 dend (80 distal dend)
%F = 96485; 		% Faraday constant
%
%% Derived parameters
%r2 = (d/2); 		% um, outer radius
%r1 = (r2-dshell); 	% um, inner radius
%Vshell = ((3.14*r2^2*l-3.14*r1^2*l));
%
%% ODEs
%caHVA' = -phi*(IHVA/(F*Vshell))+(Carest-cai)/tauCa
%caHVA(0) = rand(Npop,1)
%
%% Interface
%caHVA => caHVA
%
%% Notes:
%% for potassium buffer ([K+]i=const; [K+]o dynamics same as above):
%% dshell=70nm (extracellular space)
%% phi=2, tauK=7, EK=25*ln([K+]o/[K+]i)
%% [K+]i=140 mmol/l, [K+]o(t=0)=[K+]rest=3.82 mmol/l

